// Registration type and runtime parameters
(Transform "AffineTransform")
(MaximumNumberOfIterations 2000)
(NumberOfSpatialSamples 10000)
(CheckNumberOfSamples "false" )

// Multiresolution strategy
(FinalGridSpacingInVoxels 16 16)
(Registration "MultiResolutionRegistration")
(NumberOfResolutions 5)
(FixedImagePyramidSchedule 64 64 16 16 8 8 2 2 1 1)
(MovingImagePyramidSchedule 16 16 16 16 8 8 2 2 1 1)

// Generation of smoothed representation of input images?
(FixedImagePyramid "FixedSmoothingImagePyramid" )
(MovingImagePyramid "MovingSmoothingImagePyramid" )

// Initial transformation
(AutomaticTransformInitialization "true")
(AutomaticTransformInitializationMethod "CenterOfGravity")
(AutomaticScalesEstimation "true")

// How to spread the sample points in the images
(ImageSampler "Random" )
(NewSamplesEveryIteration "true")
(ResultImagePixelType "float")
(DefaultPixelValue 0)
(Optimizer "AdaptiveStochasticGradientDescent")

// Optimizer parameters
(SP_alpha 10.0)
(SP_A 50.0)
(Scales 50000.0)


// Control output during registration. 
// Not needed if you're only interested in the result
(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(WriteResultImageAfterEachResolution "false")
(WritePyramidImagesAfterEachResolution "true")

// Pixel types of output image data.
// Set to float if your input data are floats
// Will lead to weird output if you co-align unsigned int, but transform float images
(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")
(UseDirectionCosines "true")

// About interpolation of involved images.
// Set ResampleInterpolator to NearestNeighbour for Atlas registration 
(Interpolator "LinearInterpolator" )
(ResampleInterpolator "FinalLinearInterpolator")
(AutomaticParameterEstimation "true")

(Metric "AdvancedMattesMutualInformation" )
(NumberOfHistogramBins 16)
(HowToCombineTransforms "Compose")
(ErodeMask "false")
(WriteResultImage "true")
(ResultImageFormat "tif")
